
metadata:
  name: CNM - Workflow
  author: Doga Ozgulbas
  info: Initial PCR workflow for RPL workcell
  version: 0.1

workcell: /home/rpl/workspace/polybot_workcell/polybot_workcell/polybot_workcell.yaml

modules:
  - name: chemspeed
  - name: tecan
  - name: ur5


flowdef:

- name: Open Chemspeed
  module: chemspeed
  command: open_chemspeed
  args:
    foo: "bar"
  checks: RESOURCE_CHECK
  comment: resource check not implemented, but will be

- name: Mix Reactions
  module: chemspeed
  command: run_chemspeed
  args:
    name_protocol: "closed_loop1"
  checks: RESOURCE_CHECK
  comment: resource check not implemented, but will be

- name: Close chemspeed
  module: chemspeed
  command: close_chemspeed
  args:
    name_protocol: "closed_loop1"
  checks: RESOURCE_CHECK
  comment: resource check not implemented, but will be

- name: Open Tecan
  module: tecan
  command: open_gate
  args: 
    foo: "bar"
  checks: null
  comment: Open Tecan Gate

- name: Move plate from Chemspeed to Tecan
  module: ur5
  command: run_urp_program
  args:
    program_name: "chemspeed2tecan.urp" 
  checks: null
  comment: Place plate in Chemspeed deck1

- name: run Tecan
  module: tecan
  command: run_tecan
  args: 
    protocol_path: "path"
  checks: null
  comment: Run protocol at tecan

- name: Close Tecan
  module: tecan
  command: close_gate
  args: 
    foo: "bar"
  checks: null
  comment: Close Tecan Gate

- name: Open Tecan
  module: tecan
  command: open_gate
  args: 
    foo: "bar"
  checks: null
  comment: Open Tecan Gate

- name: Move plate from Tecan to Chemspeed
  module: ur5
  command: run_urp_program
  args:
    program_name: "tecan2chemspeed.urp" 
  checks: null
  comment: Place plate in Chemspeed deck1

- name: Close Tecan
  module: tecan
  command: close_gate
  args: 
    foo: "bar"
  checks: null
  comment: Close Tecan Gate

 #- name: Move plate into Tecan
 #    module: ur5
 #    command: transfer
 #    args:
 #      foo: "bar" 
 #    checks: null
 #    comment: Place plate in Tecan



  # - name: Remove lid
  #   module: ur5
  #   command: remove_lid
  #   args:
  #     source: chemspeed.deck1
  #     target: platenest
  #   checks: null
  #   comment: Remove lid

  # - name: Mix Reactions
  #   module: chemspeed
  #   command: open_chemspeed
  #   args:
  #    foo: "bar"
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  # - name: Mix Reactions
  #   module: chemspeed
  #   command: run_chemspeed
  #   args:
  #     name_protocol: "closed_loop1"
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  # - name: Mix Reactions
  #   module: chemspeed
  #   command: run_chemspeed
  #   args:
  #     name_protocol: "closed_loop2"
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  # - name: Mix Reactions
  #   module: chemspeed
  #   command: run_chemspeed
  #   args:
  #     name_protocol: "closed_loop3"
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  # - name: Mix Reactions
  #   module: chemspeed
  #   command: run_chemspeed
  #   args:
  #     name_protocol: "closed_loop4"
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  # - name: Mix Reactions
  #   module: chemspeed
  #   command: close_chemspeed
  #   args:
  #     foo: "bar"
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  
  # - name: Open Tecan
  #   module: tecan
  #   command: open_gate
  #   args: 
  #     foo: "bar"
  #   checks: null
  #   comment: Open Tecan Gate

  # - name: Move plate into platenest
  #   module: ur5
  #   command: transfer
  #   args:
  #     source: tecan
  #     target: platenest
  #     source_plate_rotation: wide
  #     target_plate_rotation: wide   
  #   checks: null
  #   comment: Place plate in Tecan



  # - name: Move to camera_module
  #   module: plateEx
  #   command: transfer
  #   args:
  #     source: chemspeed.deck1
  #     target: tecan
  #     source_plate_rotation: wide
  #     target_plate_rotation: wide   
  #   checks: null
  #   comment: Place plate in Tecan

  # - name: run Tecan
  #   module: tecan
  #   command: run_protocol
  #   args: 
  #     protocol_path: "C:\\Users\\svcaibio\\Documents\\Hidex Sense\\Campaign2_wei.sensetemplate"
  #   checks: null
  #   comment: Run protocol at tecan

  # - name: Open Tecan
  #   module: tecan
  #   command: open
  #   args: 
  #     foo: "bar"
  #   checks: null
  #   comment: Open Tecan Gate

  # - name: Move plate into platenest
  #   module: ur5
  #   command: transfer
  #   args:
  #     source: tecan
  #     target: platenest
  #     source_plate_rotation: wide
  #     target_plate_rotation: wide   
  #   checks: null
  #   comment: Place plate in Tecan

  # - name: Close Tecan
  #   module: tecan
  #   command: close
  #   args: 
  #     foo: "bar"
  #   checks: null
  #   comment: Close Tecan Gate

  # # - name: Move to camera_module
  # #   module: plateEx
  # #   command: transfer
  # #   args:
  # #     source: peeler.positions.default
  # #     target: camera_module.positions.plate_station
  # #     source_plate_rotation: narrow
  # #     target_plate_rotation: narrow

  # # - name: Take Picture
  # #   module: camera_module
  # #   command: take_picture
  # #   args:
  # #     save_location: local_run_results
  # #     file_name: "final_image.jpg"
